WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(RigPath, SessionPath)
-> IncludeWorkflow(Path=Extensions\ReadSchemas.bonsai, RigPath=..\local\AindPhysioFipRig.json, SessionPath=..\local\AindBehaviorSessionModel.json)

GroupWorkflow DeserializeSchemas
    SubscribeSubject RawSessionSchema
    -> AindPhysiologyFip.Session.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.Session.AindBehaviorSessionModel>)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindPhysiologyFip.Rig.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.Rig.AindPhysioFipRig>)
    -> AsyncSubject RigSchema

GroupWorkflow Init
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.String> Annotations
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<Bonsai.Vision.Circle[]> CurrentRedRoi
    BehaviorSubject<Bonsai.Vision.Circle[]> CurrentGreenIsoRoi
    BehaviorSubject<AindPhysiologyFip.Rig.RoiSettings> CurrentCombinedRoi
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<System.Reactive.Unit> StartLogging

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SessionSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)

    BooleanProperty(Value=false)
    -> Take(Count=1) => #15
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #18
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #21
    #15, #18, #21 -> Merge
    -> BehaviorSubject ExperimentState

    StringProperty(Value=../local/default.json)
    -> Take(Count=1)
    -> AsyncSubject LocalRoiDefaultPath

    BehaviorSubject<System.Reactive.Unit> ClearTasks

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

GroupWorkflow Hardware
    GroupWorkflow Cameras
        BehaviorSubject<System.Boolean> _TriggeredCamerasInitialized
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=2)
        -> Last
        -> BehaviorSubject CamerasReady

        BooleanProperty(Value=true)
        -> MulticastSubject _TriggeredCamerasInitialized
        -> Take(Count=1) => #7
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=CameraGreenIso)
        -> PropertyMapping(Gain(Selector=Gain), Offset(Selector="Offset.X,Offset.Y"), SerialNumber(Selector=SerialNumber)) => #10
        #7, #10 -> FipExtensions.FipSpinnakerCapture(Index=nil, ColorProcessing=Default, Gain=0, Offset(X=0, Y=0))
        -> FipExtensions.ToFipFrame(CameraSource=GreenIso) => #12
        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.CuttlefishFip.Parse(Register=AllenNeuralDynamics.CuttlefishFip.TimestampedTaskRisingEdgeEvent) => #15
        -> GroupWorkflow HasUv&BlueFlags
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=LightSourceUv)
            -> MemberSelector(Selector=Task.CameraPort)
            -> PropertyMapping(Value) => #5
            #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=LightSourceBlue)
            -> MemberSelector(Selector=Task.CameraPort)
            -> PropertyMapping(Value) => #10
            #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
            #6, #11 -> Zip
            -> BitwiseOr
            -> WorkflowOutput
        -> Condition => #17
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #19
        #12, #19 -> Zip
        -> PublishSubject GreenIsoCamera => #21
        BooleanProperty(Value=true)
        -> MulticastSubject _TriggeredCamerasInitialized
        -> Take(Count=1) => #24
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=CameraRed)
        -> PropertyMapping(Gain(Selector=Gain), Offset(Selector="Offset.X,Offset.Y"), SerialNumber(Selector=SerialNumber)) => #27
        #24, #27 -> FipExtensions.FipSpinnakerCapture(Index=nil, ColorProcessing=Default, Gain=0, Offset(X=0, Y=0))
        -> FipExtensions.ToFipFrame(CameraSource=Red)
        -> FlipInPlace(FlipMode=Horizontal) => #30
        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.CuttlefishFip.Parse(Register=AllenNeuralDynamics.CuttlefishFip.TimestampedTaskRisingEdgeEvent) => #33
        -> GroupWorkflow HasLimeFlags
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=LightSourceLime)
            -> MemberSelector(Selector=Task.CameraPort)
            -> PropertyMapping(Value) => #5
            #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None))
            -> WorkflowOutput
        -> Condition => #35
            WorkflowInput Source1
            -> WorkflowOutput
        #35, #33 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #37
        #30, #37 -> Zip
        -> PublishSubject RedCamera => #39
        #21, #39 -> Merge
        -> GroupBy(KeySelector=Item1.Source)
        -> ReplaySubject CameraStreams(BufferSize=nil)

    GroupWorkflow Harp
        GroupWorkflow CuttlefishFip
            BehaviorSubject<Bonsai.Harp.HarpMessage> CuttlefishFipCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=CuttlefishFip.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> AllenNeuralDynamics.CuttlefishFip.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=Off, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
            -> PublishSubject CuttlefishFipEvents

            SubscribeSubject TriggerHarpReadDump
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=Off, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject CuttlefishFipCommands

            SubscribeSubject CuttlefishFipEvents
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject ClearTasks

        SubscribeSubject CuttlefishFipEvents
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> BehaviorSubject HarpTimestampSource

    GroupWorkflow ZeroMQ
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqSubscriber)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic))
        -> Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557)
        -> PublishSubject SocketResponse

        BehaviorSubject<NetMQ.NetMQMessage> SocketRequest => #5
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Networking.ZmqPublisher)
        -> PropertyMapping(ConnectionString(Selector=ConnectionString), Topic(Selector=Topic)) => #8
        #5, #8 -> Bonsai.ZeroMQ.Publisher(ConnectionString=tcp://localhost:5557)

    GroupWorkflow Calibration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> CreateTaskFromLightSource => #2
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Iso) => #3
        #2, #3 -> Zip => #4
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> CreateTaskFromLightSource => #7
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Green) => #8
        #7, #8 -> Zip => #9
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> CreateTaskFromLightSource => #12
        -> PropertySource<FipExtensions.ToFipFrame,FipExtensions.FipCameraSource>(MemberName=CameraSource, Value=Red) => #13
        #12, #13 -> Zip => #14
        #4, #9, #14 -> Merge
        -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
        -> Take(Count=1)
        -> AsyncSubject CalibratedLasers
        -> WorkflowOutput

GroupWorkflow OperationLogic
    SubscribeSubject CamerasReady => #0
    SubscribeSubject StartExperimentShortcut => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject TriggerConfigureFipTasks
    -> Delay(DueTime=PT0.05S)
    -> MulticastSubject StartLogging
    -> Delay(DueTime=PT1S)
    -> MulticastSubject StartExperiment

    SubscribeSubject StartExperiment
    -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
    -> MulticastSubject SetTaskState

    GroupWorkflow TriggeringLogic
        BehaviorSubject<System.Reactive.Unit> TriggerConfigureFipTasks
        -> CreateObservable CreateFipModeTasks => #1
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeTaskConfiguration
                SubscribeSubject CalibratedLasers
                -> Merge
                -> CreateObservable
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=Value)
                    -> InputMapping
                      PwmPort(Selector=LightSource.Task.LightSourcePort)
                      DutyCycle(Selector=CalibratedDutyCycle)
                      Frequency(Selector=LightSource.Task.PwmFrequency)
                      TriggerPorts(Selector=LightSource.Task.CameraPort)
                      EventsEnabled(Selector=LightSource.Task.EventsEnabled)
                      IsMuted(Selector=LightSource.Task.MuteOutput)
                      Delta1(Selector=LightSource.Task.Delta1)
                      Delta2(Selector=LightSource.Task.Delta2)
                      Delta3(Selector=LightSource.Task.Delta3)
                      Delta4(Selector=LightSource.Task.Delta4)
                    -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=IO0
                      DutyCycle=0.1
                      Frequency=10000
                      TriggerPorts=IO1
                      EventsEnabled=true
                      IsMuted=false
                      Delta1=0
                      Delta2=0
                      Delta3=0
                      Delta4=0
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge => #3
                Timer(DueTime=PT0S, Period=PT0.03S) => #4
                #3, #4 -> Zip
                -> MemberSelector(Selector=Item1)
                -> WorkflowOutput
            -> WorkflowOutput
        BehaviorSubject<System.Tuple(FipExtensions.FipCameraSource,System.Single)> TriggerContinuousLaserTask
        -> CreateObservable CreateCalibrationModeTask => #3
            WorkflowInput Source1
            -> Sink ClearTasks
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject ClearTasks
                -> WorkflowOutput
            -> Delay(DueTime=PT0.05S)
            -> SelectMany MakeContinuousLaserTask
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject laser

                SubscribeSubject CalibratedLasers => #3
                SubscribeSubject laser
                -> MemberSelector(Selector=Item1)
                -> PropertyMapping(Value) => #6
                #3, #6 -> Index(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=None))
                -> CreateObservable CreateContinuousTask
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject thisCalibration

                    SubscribeSubject thisCalibration => #3
                    SubscribeSubject thisCalibration
                    -> MemberSelector(Selector=LightSource.Task.LightSourcePort)
                    -> PropertyMapping(PwmPort) => #6
                    SubscribeSubject laser
                    -> MemberSelector(Selector=Item2)
                    -> PropertyMapping(DutyCycle) => #9
                    #3, #6, #9 -> AllenNeuralDynamics.CuttlefishFip.ConfigureTask
                      MessageType=Write
                      PwmPort=None
                      DutyCycle=0.1
                      Frequency=10000
                      TriggerPorts=None
                      EventsEnabled=false
                      IsMuted=false
                      Delta1=10000
                      Delta2=0
                      Delta3=0
                      Delta4=0
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge
                -> WorkflowOutput
            -> WorkflowOutput
        #1, #3 -> Merge
        -> Switch
        -> MulticastSubject CuttlefishFipCommands

        SubscribeSubject ClearTasks
        -> CreateObservable ClearTasks
            AllenNeuralDynamics.CuttlefishFip.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload(SetTaskState=Abort))
            -> MulticastSubject CuttlefishFipCommands
            -> Delay(DueTime=PT0.03S)
            -> AllenNeuralDynamics.CuttlefishFip.CreateMessage(MessageType=Write, Payload=AllenNeuralDynamics.CuttlefishFip.CreateClearAllTasksPayload(ClearAllTasks=Disabled))
            -> MulticastSubject CuttlefishFipCommands
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

        BehaviorSubject<AllenNeuralDynamics.CuttlefishFip.TaskState> SetTaskState
        -> AllenNeuralDynamics.CuttlefishFip.Format(MessageType=Write, Register=AllenNeuralDynamics.CuttlefishFip.SetTaskState)
        -> MulticastSubject CuttlefishFipCommands

    GroupWorkflow ZeroMQ
        SubscribeSubject HarpTimestampSource => #0
        SubscribeSubject ExperimentState => #1
        #0, #1 -> WithLatestFrom
        -> Format(Format="{{state: {1}, timestamp: {0}}}", Selector="Item1,Item2")
        -> Bonsai.ZeroMQ.ToMessage
        -> MulticastSubject SocketRequest

        SubscribeSubject SocketResponse
        -> MemberSelector(Selector=Last)
        -> Bonsai.ZeroMQ.ConvertToString
        -> Equal(Operand=StringProperty(Value=Start))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject StartExperimentShortcut => #12
        SubscribeSubject HarpTimestampSource => #13
        #12, #13 -> WithLatestFrom
        -> Format(Format="{{start: 1, timestamp: {0}}}", Selector="Item1,Item2")
        -> Bonsai.ZeroMQ.ToMessage
        -> MulticastSubject SocketRequest

        SubscribeSubject SocketResponse
        -> MemberSelector(Selector=Last)
        -> Bonsai.ZeroMQ.ConvertToString
        -> Equal(Operand=StringProperty(Value=End))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Unit
        -> MulticastSubject EndExperiment => #24
        SubscribeSubject HarpTimestampSource => #25
        #24, #25 -> WithLatestFrom
        -> Format(Format="{{end: 1, timestamp: {0}}}", Selector="Item1,Item2")
        -> Bonsai.ZeroMQ.ToMessage
        -> MulticastSubject SocketRequest

Defer Processing
    SubscribeSubject GreenIsoCamera
    -> Condition IsoChannel
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> MemberSelector(Selector=Task.CameraPort)
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceUv)
        -> MemberSelector(Selector=Task.LightSourcePort)
        -> PropertyMapping(Value) => #10
        #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
        #6, #11 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector="Item1,Item2.Seconds")
    -> Bonsai.Harp.CreateTimestamped
    -> ModifyFipCameraSource(Source=Iso) => #4
    SubscribeSubject CurrentGreenIsoRoi
    -> PropertyMapping(Circles) => #6
    #4, #6 -> FipExtensions.CircleActivityCalculator(Operation=Avg) => #7
    SubscribeSubject GreenIsoCamera
    -> Condition GreenChannel
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> MemberSelector(Selector=Task.CameraPort)
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceBlue)
        -> MemberSelector(Selector=Task.LightSourcePort)
        -> PropertyMapping(Value) => #10
        #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
        #6, #11 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector="Item1,Item2.Seconds")
    -> Bonsai.Harp.CreateTimestamped
    -> ModifyFipCameraSource(Source=Green) => #12
    SubscribeSubject CurrentGreenIsoRoi
    -> PropertyMapping(Circles) => #14
    #12, #14 -> FipExtensions.CircleActivityCalculator(Operation=Avg) => #15
    SubscribeSubject RedCamera
    -> Condition RedChannel
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Value) => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> MemberSelector(Selector=Task.CameraPort)
        -> PropertyMapping(Value) => #5
        #1, #5 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #6
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=LightSourceLime)
        -> MemberSelector(Selector=Task.LightSourcePort)
        -> PropertyMapping(Value) => #10
        #10, #1 -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.CuttlefishFip.Ports>(Value=None)) => #11
        #6, #11 -> Zip
        -> BitwiseAnd
        -> WorkflowOutput
    -> MemberSelector(Selector="Item1,Item2.Seconds")
    -> Bonsai.Harp.CreateTimestamped
    -> ModifyFipCameraSource(Source=Red) => #20
    SubscribeSubject CurrentRedRoi
    -> PropertyMapping(Circles) => #22
    #20, #22 -> FipExtensions.CircleActivityCalculator(Operation=Avg) => #23
    #7, #15, #23 -> Merge
    -> GroupBy(KeySelector=Value.FipFrame.Source, ElementSelector="")
    -> WorkflowOutput
-> ReplaySubject ParsedFipStreams(BufferSize=nil)

Defer QA
    GroupWorkflow ProtocolValidation => #0
        SubscribeSubject Repository
        -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
        -> BitwiseNot => #2
        SubscribeSubject SessionSchema
        -> MemberSelector(Selector=AllowDirtyRepo) => #4
        #2, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
          Expression: Item2 ? False : Item1
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

        GroupWorkflow CameraChecks
            SubscribeSubject CameraStreams
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Item1.FrameNumber)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #9
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #11
                #9, #11 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject CameraStreams
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Item1.FrameTime)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #7
                #4 -> MemberSelector(Selector=Item2.Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #9
                #7, #9 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #12
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #13
                #12, #13 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Timer(DueTime=PT0S, Period=PT10S) => #18
                #16, #18 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation) => #4
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it) => #7
                    SubscribeSubject HarpTimestampSource => #8
                    #7, #8 -> WithLatestFrom
                    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=HardwareQA)
                    -> MulticastSubject SoftwareEvent => #11
                    #4, #11 -> Zip
                    -> Take(Count=1)
                    -> WorkflowOutput
            -> Merge
    SubscribeSubject SessionSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

IntProperty(Value=0)
-> Visualizer
    SubscribeSubject ParsedFipStreams
    -> Condition HasIso
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> HasFlag(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Iso))
        -> WorkflowOutput
    -> Merge
    -> PublishSubject IsoActivity

    SubscribeSubject ParsedFipStreams
    -> Condition HasGreen
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> HasFlag(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Green))
        -> WorkflowOutput
    -> Merge
    -> PublishSubject GreenActivity

    SubscribeSubject ParsedFipStreams
    -> Condition HasRed
        WorkflowInput Source1
        -> MemberSelector(Selector=Key) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> HasFlag(Operand=WorkflowProperty<FipExtensions.FipCameraSource>(Value=Red))
        -> WorkflowOutput
    -> Merge
    -> PublishSubject RedActivity

    IntProperty(Value=0)
    -> Visualizer FipVisualizer
        Bonsai.Gui.LabelBuilder IsoCamera(Enabled=true, Visible=true, Text=Isosbestic)
        -> VisualizerMapping => #1
        SubscribeSubject IsoActivity
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.CircleActivityCollectionVisualizer>) => #3
        #1, #3 -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=1
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.03), RowStyle(SizeType=Percent, Height=0.97))
          CellSpans=""
        -> VisualizerMapping => #5
        Bonsai.Gui.LabelBuilder GreenCamera(Enabled=true, Visible=true, Text=Green)
        -> VisualizerMapping => #7
        SubscribeSubject GreenActivity
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.CircleActivityCollectionVisualizer>) => #9
        #7, #9 -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=1
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.03), RowStyle(SizeType=Percent, Height=0.97))
          CellSpans=""
        -> VisualizerMapping => #11
        Bonsai.Gui.LabelBuilder RedCamera(Enabled=true, Visible=true, Text=Red)
        -> VisualizerMapping => #13
        SubscribeSubject RedActivity
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.CircleActivityCollectionVisualizer>) => #15
        #13, #15 -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=1
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.03), RowStyle(SizeType=Percent, Height=0.97))
          CellSpans=""
        -> VisualizerMapping => #17
        IntProperty(Value=0)
        -> TimeSpanProperty(Value=PT0S)
        -> Take(Count=1) => #20
        Timer(DueTime=PT0S, Period=PT0.2S) => #21
        SubscribeSubject StartExperiment => #22
        #21, #22 -> SubscribeWhen
        -> Timestamp
        -> MemberSelector(Selector=Timestamp) => #25
        -> Take(Count=1) => #26
        #25, #26 -> CombineLatest
        -> Subtract => #28
        #20, #28 -> Merge
        -> Format(Format={0:T}, Selector=it)
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ButtonBuilder Time(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 24pt", Text="")
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #33
        #5, #11, #17, #33 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #35
        IntProperty(Value=0)
        -> Visualizer LauncherControl
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
            -> PublishSubject StartExperimentToggleButton
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #5
            Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
            -> PublishSubject EndExperimentButton
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #8
            #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #10
            GroupWorkflow Annotation
                BehaviorSubject<System.String> _ResetText
                -> StringProperty
                -> PropertyMapping(Text)
                -> Bonsai.Gui.TextBoxBuilder(Enabled=true, Visible=true, Text="", Multiline=true)
                -> BehaviorSubject _TextBoxText
                -> VisualizerMapping => #5
                Bonsai.Gui.ButtonBuilder Send(Enabled=true, Visible=true, Text=Send)
                -> PublishSubject _SendButtonEvent
                -> VisualizerMapping => #8
                #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder
                  Enabled=true
                  Visible=true
                  ColumnCount=1
                  RowCount=2
                  ColumnStyles=""
                  RowStyles(RowStyle(SizeType=Percent, Height=0.8), RowStyle(SizeType=Percent, Height=0.2))
                  CellSpans=""
                -> WorkflowOutput

                SubscribeSubject _SendButtonEvent => #11
                SubscribeSubject _TextBoxText => #12
                #11, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Condition
                    WorkflowInput Source1
                    -> NotEqual(Operand=StringProperty(Value=""))
                    -> WorkflowOutput
                -> MulticastSubject _ResetText
                -> MulticastSubject Annotations
            -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #12
            #10, #12 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=2
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.15), RowStyle(SizeType=Percent, Height=0.85))
              CellSpans=""
            -> WorkflowOutput

            SubscribeSubject StartExperimentToggleButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject StartExperimentShortcut

            SubscribeSubject EndExperimentButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject EndExperiment => #22
            SubscribeSubject StartExperiment => #23
            #22, #23 -> SubscribeWhen
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #38
        #35, #38 -> Bonsai.Gui.TableLayoutPanelBuilder FipVisualizer
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=1
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.66), ColumnStyle(SizeType=Percent, Width=0.33))
          RowStyles=""
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #14
    IntProperty(Value=0)
    -> Visualizer RoiManager
        IntProperty(Value=0)
        -> Visualizer Save/LoadRois
            Bonsai.Gui.ButtonBuilder SaveRoi(Enabled=true, Visible=true, Text=SaveRoi)
            -> Sink SaveRoi
                WorkflowInput Source1
                -> SelectMany SaveRois
                    SubscribeSubject CurrentCombinedRoi
                    -> AindPhysiologyFip.Rig.SerializeToJson => #1
                    SubscribeSubject LocalRoiDefaultPath
                    -> PropertyMapping(Path) => #3
                    #1, #3 -> Bonsai.IO.WriteAllText(Path=../local/default.json, Overwrite=true, Append=false)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> VisualizerMapping => #2
            Bonsai.Gui.ButtonBuilder LoadRoi(Enabled=true, Visible=true, Text=LoadRoi)
            -> Sink LoadRoi
                WorkflowInput Source1
                -> SelectMany LoadRois
                    SubscribeSubject LocalRoiDefaultPath
                    -> PropertyMapping(Path)
                    -> Bonsai.IO.ReadAllText(Path=../local/default.json)
                    -> AindPhysiologyFip.Rig.DeserializeFromJson(Type=TypeMapping<AindPhysiologyFip.Rig.RoiSettings>)
                    -> FipExtensions.RoiCircleConverter => #4
                    -> MemberSelector(Selector=GreenIso)
                    -> MulticastSubject CurrentGreenIsoRoi => #6
                    #4 -> MemberSelector(Selector=Red)
                    -> MulticastSubject CurrentRedRoi => #8
                    #6, #8 -> Zip
                    -> IntProperty(Value=0)
                    -> Take(Count=1) => #11
                    IntProperty(Value=0)
                    -> Take(Count=1)
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="Could not load local ROI settings.", Title=Error, MessageBoxIcon=Exclamation) => #14
                    #11, #14 -> Catch
                    -> WorkflowOutput
                -> WorkflowOutput
            -> VisualizerMapping => #5
            Bonsai.Gui.ButtonBuilder DefaultRoi(Enabled=true, Visible=true, Text=DefaultRoi)
            -> Sink DefaultRoi
                WorkflowInput Source1
                -> SelectMany LoadRois
                    FipExtensions.LoadRoiDefault(Path=../local/default.json)
                    -> FipExtensions.RoiCircleConverter => #1
                    -> MemberSelector(Selector=GreenIso)
                    -> MulticastSubject CurrentGreenIsoRoi => #3
                    #1 -> MemberSelector(Selector=Red)
                    -> MulticastSubject CurrentRedRoi => #5
                    #3, #5 -> Zip
                    -> IntProperty(Value=0)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> VisualizerMapping => #8
            #2, #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
        IntProperty(Value=0)
        -> Visualizer RoiManager
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=RoiSettings) => #2
            SubscribeSubject LocalRoiDefaultPath
            -> PropertyMapping(Path) => #4
            #2, #4 -> FipExtensions.LoadRoiDefault(Path=../local/default.json)
            -> FipExtensions.RoiCircleConverter => #6
            -> MemberSelector(Selector=GreenIso)
            -> MulticastSubject CurrentGreenIsoRoi => #8
            #6 -> MemberSelector(Selector=Red)
            -> MulticastSubject CurrentRedRoi => #10
            #8, #10 -> Zip

            Bonsai.Gui.LabelBuilder GreenCamera(Enabled=true, Visible=true, Text=Green)
            -> VisualizerMapping => #13
            SubscribeSubject GreenActivity
            -> MemberSelector(Selector=Value.FipFrame.Image) => #15
            SubscribeSubject CurrentGreenIsoRoi
            -> FipExtensions.CircleArrayDistinctUntilChanged => #17
            -> BooleanProperty(Value=true) => #18
            #17, #18 -> Zip
            -> PropertyMapping(Circles(Selector=Item1), Refresh(Selector=Item2)) => #20
            #15, #20 -> SelectCircles
              Circles
                Circle(Center(X=10, Y=10), Radius=10)
                Circle(Center(X=50, Y=50), Radius=20)
                Circle(Center(X=50, Y=150), Radius=20)
                Circle(Center(X=150, Y=50), Radius=20)
                Circle(Center(X=150, Y=150), Radius=20)
              Refresh=false
            -> Sink
                WorkflowInput Source1
                -> FipExtensions.CircleArrayDistinctUntilChanged
                -> MulticastSubject CurrentGreenIsoRoi
                -> WorkflowOutput
            -> VisualizerMapping => #23
            #13, #23 -> Bonsai.Gui.TableLayoutPanelBuilder
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=1
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.03), RowStyle(SizeType=Percent, Height=0.97))
              CellSpans=""
            -> VisualizerMapping => #25
            Bonsai.Gui.LabelBuilder RedCamera(Enabled=true, Visible=true, Text=RedCamera)
            -> VisualizerMapping => #27
            SubscribeSubject RedActivity
            -> MemberSelector(Selector=Value.FipFrame.Image) => #29
            SubscribeSubject CurrentRedRoi
            -> FipExtensions.CircleArrayDistinctUntilChanged => #31
            -> BooleanProperty(Value=true) => #32
            #31, #32 -> Zip
            -> PropertyMapping(Circles(Selector=Item1), Refresh(Selector=Item2)) => #34
            #29, #34 -> SelectCircles
              Circles
                Circle(Center(X=10, Y=10), Radius=10)
                Circle(Center(X=50, Y=50), Radius=20)
                Circle(Center(X=50, Y=150), Radius=20)
                Circle(Center(X=150, Y=50), Radius=20)
                Circle(Center(X=150, Y=150), Radius=20)
              Refresh=false
            -> Sink
                WorkflowInput Source1
                -> FipExtensions.CircleArrayDistinctUntilChanged
                -> MulticastSubject CurrentRedRoi
                -> WorkflowOutput
            -> VisualizerMapping => #37
            #27, #37 -> Bonsai.Gui.TableLayoutPanelBuilder
              Enabled=true
              Visible=true
              ColumnCount=1
              RowCount=1
              ColumnStyles=""
              RowStyles(RowStyle(SizeType=Percent, Height=0.03), RowStyle(SizeType=Percent, Height=0.97))
              CellSpans=""
            -> VisualizerMapping => #39
            #25, #39 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput

            SubscribeSubject CurrentGreenIsoRoi => #42
            SubscribeSubject CurrentRedRoi => #43
            #42, #43 -> CombineLatest
            -> FipExtensions.RoiCircleConverter
            -> MulticastSubject CurrentCombinedRoi
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled) => #8
        #2, #5, #8 -> Bonsai.Gui.TableLayoutPanelBuilder RoiManager
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.05), RowStyle(SizeType=Percent, Height=0.95))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #17
    IntProperty(Value=0)
    -> Visualizer LaserCalibration
        SubscribeSubject SelectedCamera => #0
        SubscribeSubject Power => #1
        #0, #1 -> CombineLatest
        -> BehaviorSubject CurrentSettings

        ExternalizedMapping(Value(DisplayName=Power, Category=LightSource))
        -> FloatProperty(Value=0.1904762)
        -> BehaviorSubject Power

        PropertySource<ModifyFipCameraSource,FipExtensions.FipCameraSource>(MemberName=Source, Value=Iso) => #7
        PropertySource<ModifyFipCameraSource,FipExtensions.FipCameraSource>(MemberName=Source, Value=Green) => #8
        PropertySource<ModifyFipCameraSource,FipExtensions.FipCameraSource>(MemberName=Source, Value=Red) => #9
        #7, #8, #9 -> Merge
        -> Take(Count=3)
        -> ToList
        -> Bonsai.Gui.ComboBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
        -> BehaviorSubject SelectedCamera
        -> VisualizerMapping
        -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Channel:)
        -> VisualizerMapping => #17
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=false, ToolbarVisible=false, AutoRefresh=false)
        -> VisualizerMapping => #19
        #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #21
        Bonsai.Gui.ButtonBuilder SetPower(Enabled=true, Visible=true, Text=SetPower)
        -> Sink
            WorkflowInput Source1 => #0
            SubscribeSubject CurrentSettings => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject TriggerContinuousLaserTask
            -> Delay(DueTime=PT0.2S)
            -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
            -> MulticastSubject SetTaskState
            -> WorkflowOutput
        -> VisualizerMapping => #24
        Bonsai.Gui.ButtonBuilder StartFipMode(Enabled=true, Visible=true, Text=StartFipMode)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject TriggerConfigureFipTasks
            -> Delay(DueTime=PT0.2S)
            -> PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Start)
            -> MulticastSubject SetTaskState
            -> WorkflowOutput
        -> VisualizerMapping => #27
        Bonsai.Gui.ButtonBuilder Off(Enabled=true, Visible=true, Text=Off)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject ClearTasks
            -> WorkflowOutput
        -> VisualizerMapping => #30
        #24, #27, #30 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #32
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled) => #35
        #21, #32, #35 -> Bonsai.Gui.TableLayoutPanelBuilder LightSourceCalibration(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 21.75pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #20
    #14, #17, #20 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TabControlVisualizer>) => #22
    IntProperty(Value=0)
    -> Visualizer ActivityTraces
        SubscribeSubject RedActivity
        -> MemberSelector(Selector=Value.Count) => #1
        SubscribeSubject GreenActivity
        -> MemberSelector(Selector=Value.Count) => #3
        #1, #3 -> CombineLatest
        -> Bonsai.Numerics.Min
        -> DistinctUntilChanged
        -> BehaviorSubject ChannelNumbers

        SubscribeSubject ChannelNumbers
        -> SelectMany CreateLabels
            IntProperty(Value=0) => #0
            StringProperty(Value=Background) => #1
            #0, #1 -> Zip
            -> Take(Count=1) => #3
            SubscribeSubject ChannelNumbers
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Count)
            -> Range(Start=1, Count=0) => #7
            -> Format(Format=Channel{0}, Selector=it) => #8
            #7, #8 -> Zip => #9
            #3, #9 -> Merge
            -> ToList
            -> WorkflowOutput
        -> Bonsai.Gui.ComboBoxDataSourceBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 12pt", DisplayMember=Item2) => #10
        -> MemberSelector(Selector=Item1)
        -> BehaviorSubject SelectedChannel
        #10 -> VisualizerMapping => #13
        SubscribeSubject IsoActivity => #14
        SubscribeSubject SelectedChannel
        -> PropertyMapping(SelectedChannel) => #16
        #14, #16 -> FipSignalVisualizerSource(Capacity=10, Color(Val0=255, Val1=0, Val2=0, Val3=255), Title=Isosbestic)
        -> VisualizerMapping(VisualizerType=TypeMapping<FipSignalVisualizer>) => #18
        SubscribeSubject GreenActivity => #19
        SubscribeSubject SelectedChannel
        -> PropertyMapping(SelectedChannel) => #21
        #19, #21 -> FipSignalVisualizerSource(Capacity=10, Color(Val0=0, Val1=255, Val2=0, Val3=255), Title=Green)
        -> VisualizerMapping(VisualizerType=TypeMapping<FipSignalVisualizer>) => #23
        SubscribeSubject RedActivity => #24
        SubscribeSubject SelectedChannel
        -> PropertyMapping(SelectedChannel) => #26
        #24, #26 -> FipSignalVisualizerSource(Capacity=10, Color(Val0=0, Val1=0, Val2=255, Val3=255), Title=Red)
        -> VisualizerMapping(VisualizerType=TypeMapping<FipSignalVisualizer>) => #28
        #13, #18, #23, #28 -> Bonsai.Gui.TableLayoutPanelBuilder Activity
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=4
          ColumnStyles=""
          RowStyles
            RowStyle(SizeType=Percent, Height=0.1)
            RowStyle(SizeType=Percent, Height=0.3)
            RowStyle(SizeType=Percent, Height=0.3)
            RowStyle(SizeType=Percent, Height=0.3)
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #25
    #22, #25 -> Bonsai.Gui.TableLayoutPanelBuilder FipGUI(Enabled=true, Visible=true, Font="Consolas, 13.875pt", ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

Defer Logging => #11
    SubscribeSubject LoggingRootPath
    -> Bonsai.Scripting.Expressions.ExpressionTransform DateTime.Now
      Expression: DateTime.Now.ToString("yyyy-MM-ddTHHmmss")
    -> Take(Count=1)
    -> AsyncSubject DateTimeSuffix

    SubscribeSubject LoggingRootPath
    -> AllenNeuralDynamics.Core.AppendModalitySuffix(Modality=Fib)
    -> Take(Count=1)
    -> Defer Fib
        WorkflowInput Source1 => #0
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=RigName) => #2
        SubscribeSubject DateTimeSuffix => #3
        #0, #2, #3 -> Zip
        -> Format(Format={0}/{1}_{2}, Selector="Item1, Item2, Item3")
        -> Take(Count=1)
        -> AsyncSubject RootLoggingPath

        Defer Logs
            StringProperty(Value=Logs)
            -> Take(Count=1)
            -> AsyncSubject DeviceName

            SubscribeSubject SessionSchema
            -> AindPhysiologyFip.Session.SerializeToJson => #4
            SubscribeSubject DeviceName
            -> PropertyMapping(DeviceName) => #6
            #4, #6 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=nil, LogName=session_output)

            SubscribeSubject RigSchema
            -> AindPhysiologyFip.Rig.SerializeToJson => #9
            SubscribeSubject DeviceName
            -> PropertyMapping(DeviceName) => #11
            #9, #11 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=nil, LogName=rig_output)

            SubscribeSubject RawSessionSchema => #13
            SubscribeSubject DeviceName
            -> PropertyMapping(DeviceName) => #15
            #13, #15 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=nil, LogName=session_input, Extension=json)

            SubscribeSubject RawRigSchema => #17
            SubscribeSubject DeviceName
            -> PropertyMapping(DeviceName) => #19
            #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=nil, LogName=rig_input, Extension=json)

        SubscribeSubject CameraStreams
        -> CreateObservable LogCameraMetadata
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject CameraStream
            -> MemberSelector(Selector=Key)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToString
              Expression: it.ToString()
            -> FipExtensions.PascalToSnake
            -> AsyncSubject CameraName

            SubscribeSubject CameraStream
            -> Merge
            -> MemberSelector(Selector="Item1,Item2.Seconds")
            -> Bonsai.Harp.CreateTimestamped
            -> Timestamp
            -> MemberSelector(Selector="Value.Seconds,Value.Value.FrameNumber,Value.Value.FrameTime,Timestamp.UtcDateTime")
            -> Bonsai.Scripting.Expressions.ExpressionTransform ReLabel => #13
              Expression:
                new(
                Item1 as ReferenceTime,
                Item2 as CameraFrameNumber,
                Item3 as CameraFrameTime,
                Item4 as CpuTime)
            SubscribeSubject CameraName
            -> Format(Format=camera_{0}_metadata, Selector=it)
            -> PropertyMapping(LogName) => #16
            #13, #16 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=nil, DeviceName=nil)
            -> WorkflowOutput
        -> Merge

        SubscribeSubject ParsedFipStreams
        -> CreateObservable LogFipStreams
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject fipStream
            -> MemberSelector(Selector=Key)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToString
              Expression: it.ToString()
            -> FipExtensions.PascalToSnake
            -> AsyncSubject fipStreamName

            SubscribeSubject fipStream
            -> Merge => #8
            SubscribeSubject fipStreamName
            -> PropertyMapping(LogName) => #10
            #8, #10 -> IncludeWorkflow(Path=Extensions\FipLogger.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=nil, DeviceName=nil)
        -> Merge

        SubscribeSubject CurrentCombinedRoi
        -> AindPhysiologyFip.Rig.SerializeToJson
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=nil, LogName=regions, Extension=json)

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent => #0
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #2
            #0, #2 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Repository
            -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
            -> MulticastSubject SoftwareEvent

            SubscribeSubject CurrentCombinedRoi
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Regions)
            -> MulticastSubject SoftwareEvent
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #13
#11, #13 -> TakeUntil => #14
SubscribeSubject StartLogging => #15
#14, #15 -> SubscribeWhen

SubscribeSubject EndExperiment
-> SelectMany Cleanup
    PropertySource<AllenNeuralDynamics.CuttlefishFip.CreateSetTaskStatePayload,AllenNeuralDynamics.CuttlefishFip.TaskState>(MemberName=SetTaskState, Value=Abort)
    -> Take(Count=1)
    -> MulticastSubject SetTaskState
    -> WorkflowOutput
-> Delay(DueTime=PT3S)
-> Take(Count=1)
-> WorkflowOutput
